e
var c
var p
var o
var d
var n
set_pgstat_chan 0
set_pgstat_mode 3
set_acquisition_frac_autoadjust 50
set_max_bandwidth 2
cell_off
set_range ba 210m
set_autoranging ba 210m 210m
set_range ab 4200m
set_autoranging ab 210m 4200m
meas_loop_ocp o 200m 60
  pck_start
    pck_add o
  pck_end
endloop
set_range ba 210u
set_autoranging ba 210n 210m
set_range ab 4200m
set_autoranging ab 4200m 4200m
store_var d -15m ab
add_var d o
store_var n 15m ab
add_var n o
set_e d
cell_on
meas_loop_ca p c d 200m 2
  pck_start
    pck_add p
    pck_add c
  pck_end
endloop
meas_loop_lsv p c d n 200u 100u
  pck_start
    pck_add p
    pck_add c
  pck_end
endloop
on_finished:
  cell_off

